PsychoPy2experiment version="2021.2.3"
Settings
  Completed URL = https://docs.google.com/forms/d/e/1FAIpQLScw9cWJDrjFKZ7LnAzjteDlap0OT_jjjnqFpb5YyWzcEdooPw/viewform?usp=sf_link
  Experiment info = {'participant': ''}
  Full-screen window = True
  Incomplete URL = https://docs.google.com/forms/d/e/1FAIpQLScw9cWJDrjFKZ7LnAzjteDlap0OT_jjjnqFpb5YyWzcEdooPw/viewform?usp=sf_link
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Use version = latest
  Window size (pixels) = [1920, 1200]
  expName = mdt
  exportHTML = manually
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Routines
  Routine assess
    CodeComponent slf_code
      Code Type = Py
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      Begin Routine:
        on_scale = 0
        slf_mouse.setPos([0,-0.2])
      Each Frame:
        mx = slf_mouse.getPos()
        if mx[1] > -0.125 and mx[1] < -0.075:
            on_scale = 1
        mx[1] = -0.1
        if mx[0] <= -0.5:
            mx[0] = -0.5
        elif mx[0] >= 0.5:
            mx[0] = 0.5
      End Routine:
        if nSelf == 1:
            currentLoop.addData('slf_question', item)
            currentLoop.addData('slf_response', mx[0] + 0.5)
    TextComponent slf_text
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
      wrapWidth = 1.5
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    TextComponent scale_low
      letterHeight = 0.03
      pos = (-0.65, -0.1)
      startVal [time (s)] = 0.25
      text [set every repeat] = $label_low
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    TextComponent scale_high
      letterHeight = 0.03
      pos = (0.65, -0.1)
      startVal [time (s)] = 0.25
      text [set every repeat] = $label_high
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    PolygonComponent slf_scale
      fillColor = $[1,1,1]
      pos = (0, -0.1)
      shape = rectangle
      size = (1, 0.05)
      startVal [time (s)] = 0.25
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    PolygonComponent slf_set
      fillColor = $[0, 0, 0]
      lineColor = $[0, 0, 0]
      pos [set every frame] = $mx
      shape = rectangle
      size = (0.01, 0.05)
      startVal [condition] = on_scale == 1
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    MouseComponent slf_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine intro
    CodeComponent intro_code
      Code Type = Py
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      Begin Experiment:
        # enter 1 for test monkey
        test = 0

        import random
        import math
        aspect = win.size[0]/win.size[1]

        # make a color list
        col_list = [[230, 25, 75], # red
                    [0, 120, 200]] # blue
        #            [0, 120, 0]] # green
        #            [230, 190, 255], # levander
        #            [170, 110, 40], # brown
        #            [245, 130, 48]] # orange
        # counterbalance color mapping
        random.shuffle(col_list)
        # normalize
        for i,k in enumerate(col_list):
            for j,l in enumerate(k):
                col_list[i][j] = (l/255)*2 - 1

        # 10% steps would be -0.32 -0.24 -0.16 -0.08  0.00  0.08  0.16  0.24  0.32  0.40
        # at 40% and 70%
        base_avg_list = [0.16, -0.08]

        # the value that is added to generate variabilities
        base_var_list = [0.01, 0.06]

        # make condition counterbalancer
        cond_list = [[0, 0],
                     [0, 1],
                     [1, 0],
                     [1, 1]]
        random.shuffle(cond_list)

        point_counter = 0
        res = "free"
        total_err = []
        block_err = []
        color = [0,0,0]
      Begin Routine:
        if nTrial > 0:
            # set the counterbalanced color based on difficulty
            color = col_list[dif]

        # FEEDBACK BAR

        # get a fixed base result value and add a jitter
        avg = base_avg_list[dif] + randint(0,5)/100
        # generate result values that would be at 10% to 15% distance from the goal.
        perf_pos = [
        (0, (avg - 2*base_var_list[var] + randint(0,5)/100)),
        (0, (avg - base_var_list[var] + randint(0,5)/100)),
        (0, (avg + base_var_list[var] + randint(0,5)/100)),
        (0, (avg + 2*base_var_list[var] + randint(0,5)/100)),
        ]

        # show feedback
        if id == 35:
            intro_text_content += "\n\nSu skooriks kujunes " + str(round(point_counter)) + " punkti!"
            if point_counter > 20:
                intro_text_content += "\n\nPalju õnne, sellega oled võitnud tahvli šokolaadi!"
            else:
                intro_text_content += "\n\nSellega oled tahvli šokolaadi siiski auga välja teeninud!"

        elif id == 36:
            intro_text_content += " " + str(100 - round(100*(sum(total_err)/len(total_err)))) + " protsenti."
            #  {:.0f} protsenti".format(err)

        point_counter += (avg * 200) + 2
        bar_instruction = "\n\nSul on nüüd " + str(round(point_counter)) + " punkti."
      End Routine:
        currentLoop.addData('difficulty', dif)
        currentLoop.addData('variance', var)
        currentLoop.addData('point_mean', avg)
        currentLoop.addData('points', perf_pos)
        currentLoop.addData('color', color)
    TextComponent intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $intro_text_content
      wrapWidth = 1.25
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    PolygonComponent intro_next
      fillColor = $[1,1,1]
      lineWidth = 0
      ori = 90
      pos = (0.7, -0.35)
      shape = triangle
      size [set every repeat] = $(0.12, 0.12)
      startVal [time (s)] = 0.0
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    MouseComponent intro_mouse
      clickable = intro_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine draw
    MouseComponent mouse
      clickable = next
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0
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    BrushComponent brush
      buttonRequired [set every repeat] = True
      lineWidth = 1.5
      startVal [time (s)] = 0.0
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    TextComponent timer
      letterHeight = 0.025
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0
      text [set every frame] = $dur
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    TextComponent distance
      letterHeight = 0.025
      pos = (-0.2, 0.4)
      startVal [time (s)] = 0
      text [set every frame] = $current_dist
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        dur = 0
        wait = 0
        dist = []
        lines = []
        current_dist = 0

        # set the number of links based on difficulty
        n = [3,6][dif]
        angle = [0]*n
        length = [0]*n
        start = [[]]*n
        end = [[]]*n

        # make subsequent line segments (as many as needed)
        for i in range(n):
            within = 0
            while within == 0:
                angle[i] = random.randrange(360)
                length[i] = random.randrange(20,50)/100

                if i == 0:
                    # for the first line, pick a point at random 10% away from the edge
                    start[i] = [random.randrange(-40, 40)/100, random.randrange(-40, 40)/100]
                else:
                    # for all subsequent lines, start point is the end of the last point
                    start[i] = [end[i-1][0], end[i-1][1]]

                # find the endpoint in a similar way
                end[i] = [start[i][0] + length[i]*math.cos(math.radians(angle[i])), start[i][1] + length[i]*math.sin(math.radians(angle[i]))]

                # check that the lines stay within the screen
                if abs(end[i][0]) < 0.4 and abs(end[i][1]) < 0.4 and abs(start[i][0]) < 0.4 and abs(start[i][1]) < 0.4:
                    within = 1

                # make the line
                line = visual.Line(win, start=(start[i]), end=(end[i]), lineColor=color, lineWidth = 6)

                # check that the lines don't cross a previous line?
                #if i > 0:
                #    for prev_line in lines:
                #        if line.overlaps(prev_line):
                #            within = 0

            # make the line object
            lines.append(line)
      Each Frame:
        # display lines
        for line in lines:
            if line.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
                # keep track of start time/frame for later
                line.frameNStart = frameN  # exact frame index
                line.tStart = t  # local t and not account for scr refresh
                line.tStartRefresh = tThisFlipGlobal  # on global time
                win.timeOnFlip(line, 'tStartRefresh')  # time at next scr refresh
                line.setAutoDraw(True)

        # wait for mouse release
        if wait == 0 and sum(buttons) == 0:
            wait = 1
            draw_start = t

        elif wait > 0 and sum(buttons) > 0:
            wait = 2
            dur = round(t - draw_start,2)
            # hide lines
            for line in lines:
                line.setAutoDraw(False)

            # loop over all line segments
            j = [0 for i in range(n)]
            for i in range(n):
                j[i] = abs(math.cos(math.radians(angle[i]))*(mouse.x[-1] - start[i][0]) - math.sin(math.radians(angle[i]))*(mouse.y[-1] - start[i][1]))

            current_dist = round(min(j),2)
            # add the smallest one to the counter
            dist.append(min(j))

        elif wait == 2 and sum(buttons) == 0:
            wait = 3
      End Routine:
        mean_dist = round(sum(dist)/len(dist),2)
        brush.reset()
    PolygonComponent next
      fillColor = $[1,1,1]
      lineWidth = 0
      ori = 90
      pos = (0.7, -0.35)
      shape = triangle
      size [set every repeat] = $(0.12, 0.12)
      startVal [condition] = wait == 3
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  Routine fb
    CodeComponent bar_code
      Code Type = Py
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      Begin Routine:
        if nSelf == 0 or nTrial == 0:
            continueRoutine = False
    TextComponent bar_text
      letterHeight = 0.04
      pos = (-0.5, 0.25)
      startVal [time (s)] = 0.0
      wrapWidth = 0.5
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    TextComponent bar_label_high
      letterHeight = 0.025
      pos = (0, 0.43)
      startVal [time (s)] = 0.0
      text = kõrge täpsus
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    PolygonComponent bar_bar
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.05, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent bar_label_low
      letterHeight = 0.025
      pos = (0, -0.43)
      startVal [time (s)] = 0.0
      text = madal täpsus
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    PolygonComponent bar_next
      fillColor = $[1,1,1]
      lineWidth = 0
      ori = 90
      pos = (0.7, -0.35)
      shape = triangle
      size [set every repeat] = $(0.12, 0.12)
      startVal [time (s)] = 3
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    MouseComponent bar_mouse
      clickable = bar_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0
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    PolygonComponent bar_p1
      fillColor = $[1, 1, 1]
      lineColor [set every repeat] = $color
      opacity = 0.5
      pos [set every frame] = $perf_pos[0]
      shape = circle
      size = [0.01,0.01]
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    PolygonComponent bar_p2
      fillColor = $[1, 1, 1]
      lineColor [set every repeat] = $color
      opacity = 0.5
      pos [set every frame] = $perf_pos[1]
      shape = circle
      size = [0.01,0.01]
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    PolygonComponent bar_p3
      fillColor [set every repeat] = $[1,1,1]
      lineColor [set every repeat] = $color
      opacity = 0.5
      pos [set every frame] = $perf_pos[2]
      shape = circle
      size = [0.01,0.01]
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Flow
  LoopInitiator block_loop loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 10
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    conditions:
      [OrderedDict([('block_id', 1), ('social_goal', 0.25), ('points_goal', 0.15), ('result', 0.05), ('points_text', '5 eurot')]),
      OrderedDict([('block_id', 2), ('social_goal', 0.25), ('points_goal', 0.15), ('result', 0.2), ('points_text', '5 eurot')]),
      OrderedDict([('block_id', 3), ('social_goal', 0.25), ('points_goal', 0.15), ('result', 0.35), ('points_text', '5 eurot')]),
      OrderedDict([('block_id', 4), ('social_goal', 0.25), ('points_goal', 0.15), ('result', 0.05), ('points_text', '5 eurot')]),
      OrderedDict([('block_id', 5), ('social_goal', 0.25), ('points_goal', 0.15), ('result', 0.2), ('points_text', '5 eurot')]),
      OrderedDict([('block_id', 6), ('social_goal', 0.25), ('points_goal', 0.15), ('result', 0.35), ('points_text', '5 eurot')]),
      OrderedDict([('block_id', 7), ('social_goal', 0.25), ('points_goal', 0.15), ('result', 0.05), ('points_text', '20 eurot')]),
      OrderedDict([('block_id', 8), ('social_goal', 0.25), ('points_goal', 0.15), ('result', 0.2), ('points_text', '20 eurot')]),
      OrderedDict([('block_id', 9), ('social_goal', 0.25), ('points_goal', 0.15), ('result', 0.35), ('points_text', '20 eurot')]),
      OrderedDict([('block_id', 10), ('social_goal', 0.25), ('points_goal', 0.15), ('result', 0.05), ('points_text', '20 eurot')]),
      OrderedDict([('block_id', 11), ('social_goal', 0.25), ('points_goal', 0.15), ('result', 0.2), ('points_text', '20 eurot')]),
      OrderedDict([('block_id', 12), ('social_goal', 0.25), ('points_goal', 0.15), ('result', 0.35), ('points_text', '20 eurot')])]
    Routine intro
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = $nTrial
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      Routine draw
    LoopTerminator trials
    Routine fb
    LoopInitiator assess_emotion loopType="TrialHandler"
      Selected rows = $whichSelf
      conditionsFile = self_report.xlsx
      loopType = sequential
      nReps = $nSelf
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      conditions:
        [OrderedDict([('qst1', 1), ('construct', 'emotion'), ('item1', 'Kui tugevalt tunned sa praegu '), ('item2', 'naudingut, rõõmu'), ('label_low', 'Üldse mitte'), ('label_high', 'Väga tugevalt')]),
        OrderedDict([('qst1', 2), ('construct', 'emotion'), ('item1', 'Kui tugevalt tunned sa praegu '), ('item2', 'lootusrikkust, optimismi'), ('label_low', 'Üldse mitte'), ('label_high', 'Väga tugevalt')]),
        OrderedDict([('qst1', 3), ('construct', 'emotion'), ('item1', 'Kui tugevalt tunned sa praegu '), ('item2', 'uhkust, rahulolu'), ('label_low', 'Üldse mitte'), ('label_high', 'Väga tugevalt')]),
        OrderedDict([('qst1', 4), ('construct', 'emotion'), ('item1', 'Kui tugevalt tunned sa praegu '), ('item2', 'kergendust, muretust'), ('label_low', 'Üldse mitte'), ('label_high', 'Väga tugevalt')]),
        OrderedDict([('qst1', 5), ('construct', 'emotion'), ('item1', 'Kui tugevalt tunned sa praegu '), ('item2', 'viha, ärritust'), ('label_low', 'Üldse mitte'), ('label_high', 'Väga tugevalt')]),
        OrderedDict([('qst1', 6), ('construct', 'emotion'), ('item1', 'Kui tugevalt tunned sa praegu '), ('item2', 'ärevust, kõhklust'), ('label_low', 'Üldse mitte'), ('label_high', 'Väga tugevalt')]),
        OrderedDict([('qst1', 7), ('construct', 'emotion'), ('item1', 'Kui tugevalt tunned sa praegu '), ('item2', 'piinlikkust, pettumust'), ('label_low', 'Üldse mitte'), ('label_high', 'Väga tugevalt')])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
      Routine assess
    LoopTerminator assess_emotion
  LoopTerminator block_loop
